PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = word priming experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test_routine
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'Tshirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'},
      {'study_word': 'pencil'},
      {'study_word': 'vase'},
      {'study_word': 'bottle'},
      {'study_word': 'camera'},
      {'study_word': 'table'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p', 'reference': 'laptop', 'old_new': 'old'},
      {'test': '_ha_t', 'reference': 'chart', 'old_new': 'old'},
      {'test': 'T_hi_t', 'reference': 'Tshirt', 'old_new': 'old'},
      {'test': '_ou_e', 'reference': 'mouse', 'old_new': 'old'},
      {'test': 'p_s_r_', 'reference': 'pastry', 'old_new': 'old'},
      {'test': 'c_s_', 'reference': 'case', 'old_new': 'old'},
      {'test': '_ru_s_', 'reference': 'cruise', 'old_new': 'old'},
      {'test': 'p_li_e', 'reference': 'police', 'old_new': 'old'},
      {'test': 'k_y_', 'reference': 'keys', 'old_new': 'old'},
      {'test': 'p_st_r', 'reference': 'poster', 'old_new': 'old'},
      {'test': '_o_rd', 'reference': 'board', 'old_new': 'old'},
      {'test': '_a_bl_', 'reference': 'marble', 'old_new': 'old'},
      {'test': '_ho_e', 'reference': 'phone', 'old_new': 'old'},
      {'test': '_oo_', 'reference': 'book', 'old_new': 'old'},
      {'test': 'c_s_io_', 'reference': 'cushion', 'old_new': 'old'},
      {'test': 'ta_l_', 'reference': 'table', 'old_new': 'new'},
      {'test': 'p_nc_l', 'reference': 'pencil', 'old_new': 'new'},
      {'test': 'v_s_', 'reference': 'vase', 'old_new': 'new'},
      {'test': 'bo_t_e', 'reference': 'bottle', 'old_new': 'new'},
      {'test': 'c_m_ra', 'reference': 'camera', 'old_new': 'new'}]
    Routine test_routine
  LoopTerminator trials_2
